PsychoPy2experiment version="3.0.3"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 3.0.5
  Window size (pixels) = [1600, 900]
  color = white
  expName = ec_RRR
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Routines
  Routine trial
    KeyboardComponent learning_phase_response
      allowedKeys = 'space', 'None'
      correctAns = $correct_response
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      store = first key
      storeCorrect = True
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    ImageComponent learning_phase_image
      image [set every repeat] = $stimulus
      size = (1.78, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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  Routine instructions
    CodeComponent code
      Code Type = Py
      Begin Experiment:
        from numpy.random import randint
        condition_randomisation = randint(1, 3, size = 1)
        if condition_randomisation == 1:
            condition = "CS1_USpos"
        elif condition_randomisation == 2:
            condition = "CS1_USneg"

        #file_name = "trials/trials_participant_" + str(expInfo['participant']) + "_condition_" + condition + ".csv"
      Begin Routine:
        #file_name = "trials/" + block_id + ".csv"
        #file_name = "trials/" + "condition_" + condition + "_" + block_id + ".csv"
        file_name = "trials/trials_participant_" + str(expInfo['participant']) + "_condition_" + condition + "_" + block_id + "_.csv"
    KeyboardComponent key_resp_continue
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent example
      image [set every repeat] = $example_image
      pos = (0, 0.05)
      size = (0.3, 0.4)
      startVal [time (s)] = 0.0
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    TextComponent text_instructions_top
      color = black
      letterHeight = 0.03
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      text [set every repeat] = $instructions_text_top
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    TextComponent text_instructions_bottom
      color = black
      letterHeight = 0.03
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $instructions_text_bottom
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  Routine first_instructions
    KeyboardComponent key_resp_continue_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_instructions_2
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text [set every repeat] = $first_instructions_text
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Flow
  LoopInitiator instructions_loop loopType="TrialHandler"
    conditionsFile = instructions_1.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('first_instructions_text', 'first instructions text 1')]),
      OrderedDict([('first_instructions_text', 'first instructions text 2')]),
      OrderedDict([('first_instructions_text', 'first instructions text 3')])]
    Routine first_instructions
  LoopTerminator instructions_loop
  LoopInitiator blocks_loop loopType="TrialHandler"
    conditionsFile = instructions_2.xlsx
    loopType = random
    nReps = 1
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    Routine instructions
    LoopInitiator trials_loop loopType="TrialHandler"
      conditionsFile = $file_name
      loopType = sequential
      nReps = 1
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      Routine trial
    LoopTerminator trials_loop
  LoopTerminator blocks_loop
